---
API: 2.1
OpenSesame: 3.2.5
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "Extended template"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Users/vashisthdalmia/Documents/GitHub/usermodels"
set disable_garbage_collection yes
set description "A template containing a practice and an experimental phase"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set bidi yes
set background black

define inline_script Calculate_area_means
	set description "Executes Python code"
	___run__
	
	a_1, a_2, a_3 = run_pipeline(var.baseline_ps, var.ps, var.levels)
	
	var.means_final = []
	var.means_final.append([np.mean(a_1), np.std(a_1)])
	var.means_final.append([np.mean(a_2), np.std(a_2)])
	var.means_final.append([np.mean(a_3), np.std(a_3)])
	__end__
	set _prepare ""

define inline_script Calculate_area_means_2
	set description "Executes Python code"
	___run__
	
	a_4, a_5, a_6 = run_pipeline(var.baseline_ps, var.ps, var.levels)
	
	var.means_final = []
	var.means_final.append([np.mean(a_4), np.std(a_4)])
	var.means_final.append([np.mean(a_5), np.std(a_5)])
	var.means_final.append([np.mean(a_6), np.std(a_6)])
	__end__
	set _prepare ""

define inline_script ResetLocals
	set description "Executes Python code"
	set _run ""
	___prepare__
	var.baseline_ps = []
	var.ps = []
	var.levels = []
	__end__

define inline_script ResetLocals_2
	set description "Executes Python code"
	___run__
	var.baseline_ps = []
	var.ps = []
	var.levels = []
	__end__
	set _prepare ""

define sketchpad answer_presentation
	set duration 1
	set description "Displays stimuli"
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=50 html=yes show_if=always text=YES x=-256 y=-64 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=50 html=yes show_if=always text=NO x=192 y=-64 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="[q1]" x=-224 y=32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="[q2]" x=224 y=32 z_index=0

define loop arithmetic
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 30
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 difficulty easy
	setcycle 0 question_no "2 + 4"
	setcycle 0 tasktype arithmetic
	setcycle 1 difficulty medium
	setcycle 1 question_no "3x = 15"
	setcycle 1 tasktype arithmetic
	setcycle 2 difficulty hard
	setcycle 2 question_no "4x - 2 = 10"
	setcycle 2 tasktype arithmetic
	setcycle 3 difficulty easy
	setcycle 3 question_no "3 + 7"
	setcycle 3 tasktype arithmetic
	setcycle 4 difficulty medium
	setcycle 4 question_no "2x = 6"
	setcycle 4 tasktype arithmetic
	setcycle 5 difficulty hard
	setcycle 5 question_no "3x - 3 = 6"
	setcycle 5 tasktype arithmetic
	setcycle 6 difficulty easy
	setcycle 6 question_no "4 + 3"
	setcycle 6 tasktype arithmetic
	setcycle 7 difficulty medium
	setcycle 7 question_no "6x = 12"
	setcycle 7 tasktype arithmetic
	setcycle 8 difficulty hard
	setcycle 8 question_no "3x - 5 = 10"
	setcycle 8 tasktype arithmetic
	setcycle 9 difficulty easy
	setcycle 9 question_no "6 + 2"
	setcycle 9 tasktype arithmetic
	setcycle 10 difficulty medium
	setcycle 10 question_no "4x = 16"
	setcycle 10 tasktype arithmetic
	setcycle 11 difficulty hard
	setcycle 11 question_no "3x - 8 = 7"
	setcycle 11 tasktype arithmetic
	setcycle 12 difficulty easy
	setcycle 12 question_no "1 + 8"
	setcycle 12 tasktype arithmetic
	setcycle 13 difficulty medium
	setcycle 13 question_no "7x = 28"
	setcycle 13 tasktype arithmetic
	setcycle 14 difficulty hard
	setcycle 14 question_no "7x - 3 = 18"
	setcycle 14 tasktype arithmetic
	setcycle 15 difficulty easy
	setcycle 15 question_no "4 + 3"
	setcycle 15 tasktype arithmetic
	setcycle 16 difficulty medium
	setcycle 16 question_no "3x = 12"
	setcycle 16 tasktype arithmetic
	setcycle 17 difficulty hard
	setcycle 17 question_no "2x + 5 = 17"
	setcycle 17 tasktype arithmetic
	setcycle 18 difficulty easy
	setcycle 18 question_no "3 + 2"
	setcycle 18 tasktype arithmetic
	setcycle 19 difficulty medium
	setcycle 19 question_no "7x = 56"
	setcycle 19 tasktype arithmetic
	setcycle 20 difficulty hard
	setcycle 20 question_no "4x - 4 = 28"
	setcycle 20 tasktype arithmetic
	setcycle 21 difficulty easy
	setcycle 21 question_no "7 + 2"
	setcycle 21 tasktype arithmetic
	setcycle 22 difficulty medium
	setcycle 22 question_no "5x = 35"
	setcycle 22 tasktype arithmetic
	setcycle 23 difficulty hard
	setcycle 23 question_no "8x - 4 = 4"
	setcycle 23 tasktype arithmetic
	setcycle 24 difficulty easy
	setcycle 24 question_no "6 - 4"
	setcycle 24 tasktype arithmetic
	setcycle 25 difficulty medium
	setcycle 25 question_no "4x = 24"
	setcycle 25 tasktype arithmetic
	setcycle 26 difficulty hard
	setcycle 26 question_no "9x - 2 = 16"
	setcycle 26 tasktype arithmetic
	setcycle 27 difficulty easy
	setcycle 27 question_no "5 + 6"
	setcycle 27 tasktype arithmetic
	setcycle 28 difficulty medium
	setcycle 28 question_no "8x = 16"
	setcycle 28 tasktype arithmetic
	setcycle 29 difficulty hard
	setcycle 29 question_no "5x - 6 = 14"
	setcycle 29 tasktype arithmetic
	run trial_sequence

define sketchpad arithmetic_task
	set duration 1
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="[question_no]" x=0 y=0 z_index=0

define sketchpad blank_screen_1
	set duration 1
	set description "Displays stimuli"

define sequence blocksequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run reset_feedback always
	run practice_instructions always
	run ResetLocals always
	run arithmetic always
	run Calculate_area_means always
	run instructions2 always
	run ResetLocals_2 always
	run reversal always
	run Calculate_area_means_2 always
	run set_globals always

define sequence blocksequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_reset_feedback always
	run get_questions always
	run new_form_text_display always
	run questions always

define inline_script collect_pupil_trace
	set description "Executes Python code"
	___run__
	if 'dummy' in exp.items['pygaze_init'].tracker_type:
		pylink = None
	else:
		import pylink
	import numpy as np
	
	def collectPupilTrace(dur, fd=10):
		
		count = 0;
		t0 = self.time()
		a = np.zeros(dur/fd)
		_dt = 0
		#df = open(('F:\Documents\HMC\User Models\pupildata.txt'),'a')
		while _dt < dur:	
			count = count+1;
			if pylink != None:
				ps = eyetracker.pupil_size()
			else:
				# Use Y coordinate of mouse
				#ps = my_mouse.get_pos()[0][1]+var.height/2
				ps = 2
				if(count%2==0):
					ps=0
			dt = self.time()-t0
			a[int(_dt/fd):int(dt/fd)] = ps
			_dt = dt
			#df.write(str(ps))
		#df.close()		
		return a
	__end__
	set _prepare ""

define sketchpad end_of_experiment
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Thank you for participating in the experiment." x=0 y=0 z_index=0

define sketchpad end_of_practice
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the practice phase is finished"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="The Training Phase of the experiment is over. Forming a user model based on you pupil response." x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run instructions always
	run pygaze_init always
	run globals always
	run select_questions always
	run collect_pupil_trace always
	run preprocess always
	run fix_blinks always
	run pupil_area always
	run remove_outliers always
	run pipeline always
	run testing always
	run training always
	run end_of_practice always
	run end_of_experiment always

define inline_script fix_blinks
	set description "Executes Python code"
	___run__
	from scipy import interpolate
	# y is an array of pupil sizes 
	def fix_blinks(y):
		# interpolates the blinks
		x = range(len(y))
		x_non_zero = []
	
		# interpolation doesn't take into account these points. 
		# data points where is a jump in the pupil dilation are removed
		for i in range(1,len(y),1):
			if (y[i] == 0 or abs(y[i]-y[i-1]) > 0.005*y[i]):
				continue
			x_non_zero.append(i)
	
		# the y values for the x positions 
		y_non_zero = np.take(y,x_non_zero)
	
		x_new = np.arange(0,len(y),0.2)
	
		# interpolation with a 3-d spline
		tck = interpolate.splrep(x_non_zero, y_non_zero, k = 3)  # a 3rd order spline
	
		# the new y values after interpolation 
		y_new = interpolate.splev(x, tck, der=0)
		y_new = [int(round(i)) for i in y_new]
		return np.array(y_new)
	__end__
	set _prepare ""

define sketchpad fixation_cross
	set duration 2000
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_cross_1
	set duration 2000
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_cross_2
	set duration 2500
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad fixation_cross_3
	set duration 1000
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define inline_script get_baseline
	set description "Executes Python code"
	___run__
	var.baselinetrace = collectPupilTrace(750)
	var.str_baseline = ','.join([str(i) for i in var.baselinetrace])
	var.base_ps.append(var.baselinetrace)
	var.levels.append(var.difficulty)
	__end__
	set _prepare ""

define inline_script get_baseline_1
	set description "Executes Python code"
	___run__
	var.baselinetrace = collectPupilTrace(750)
	var.str_baseline = ','.join([str(i) for i in var.baselinetrace])
	var.base_ps.append(var.baselinetrace)
	var.levels.append(var.difficulty)
	__end__
	set _prepare ""

define inline_script get_baseline_2
	set description "Executes Python code"
	___run__
	var.baselinetrace_question = collectPupilTrace(1000)
	var.str_baseline_question = ','.join([str(i) for i in var.baselinetrace_question])
	__end__
	set _prepare ""

define inline_script get_questions
	set description "Executes Python code"
	___run__
	var.questions1, var.questions2 = selectQuestions(task,difficulty1,difficulty2)
	counter=0;
	__end__
	set _prepare ""

define inline_script get_response_data
	set description "Executes Python code"
	___run__
	var.pupilsizes_answer = collectPupilTrace(5000)
	var.str_pupilsizes_answer = ','.join([str(i) for i in var.pupilsizes_answer])
	__end__
	set _prepare ""

define inline_script getdata
	set description "Executes Python code"
	___run__
	var.pupilsizes = collectPupilTrace(5000)
	var.str_pupilsizes = ','.join([str(i) for i in var.pupilsizes])
	var.ps.append(var.pupilsizes)
	__end__
	___prepare__
	from time import sleep
	__end__

define inline_script getdata_1
	set description "Executes Python code"
	___run__
	var.pupilsizes = collectPupilTrace(5000)
	var.str_pupilsizes = ','.join([str(i) for i in var.pupilsizes])
	var.ps.append(var.pupilsizes)
	__end__
	set _prepare ""

define inline_script globals
	set description "Executes Python code"
	___run__
	global task,difficulty1,difficulty2,arit1,arit2,arit3, reversal1, reversal2, reversal3
	
	task = 2
	difficulty1 = 1
	difficulty2 = 3
	
	arit1 = ["2 + 6","8 + 1","3 + 6","6 + 3","7 + 2","1 + 7","3 + 2","4 + 3","5 + 4","2 + 1","7 + 3","8 + 4","4 + 7","2 + 9","1 + 5"]
	arit2 = ["2x = 8","3x = 12","4x = 8","7x = 21","6x = 24","8x = 24","3x = 9","7x = 14","2x = 16","3x = 18","5x = 10","2x = 26","4x = 16","6x = 12"]
	arit3 = ["3x - 5 = 4","6x + 2 = 20","4x - 3 = 13","2x + 8 = 18","5x - 3 = 7","7x + 5 = 12","2x + 4 = 12","3x + 4 = 13","9x - 8 = 10","4x + 5 = 17","2x - 8 = 8","5x + 4 = 24","6x - 7 = 11","4x + 3 = 19","7x - 5 = 9"]
	
	reversal1 = ["cat","dog","you","man","job","pen","jug","fox","joy","box","mix","zap","jaw","pan","jog"]
	reversal2 = ["apple","birds","syrup","quick","pizza","quirk","judge","vizor","joker","jewel","mummy","tiger","knock","major","maple"]
	reversal3 = ["jukebox","account","grizzly","puzzles","acidity","codfish","cellars","entails","opposed","plowing","sandbox","sideway","towboat","vacancy","yawning"]
	__end__
	set _prepare ""

define sketchpad instructions
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to begin!" x=0 y=0 z_index=0

define form_text_display instructions2
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Start next part of the experiment"
	set margins "50;50;50;50"
	set form_title Instructions
	__form_text__
	Words will be briefly shown to you. You need to remember the word when it appears. 
	When it disappears, reverse the letters in your head. Make sure to start when the word has disappeared.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sketchpad letter_task_1
	set duration 1
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="[question_no]" x=0 y=0 z_index=0

define form_text_display new_form_text_display
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "Instructions questions"
	__form_text__
	A series of yes-or-no questions will be presented to you. 
	After each question, you'll be shown the two answers and assocaited with each answer there will be a task.
	You have to solve the task in your head that corresponds to the answer you want to give.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define logger new_logger
	set description "Logs experimental data"
	set auto_log yes

define logger new_logger_1
	set description "Logs experimental data"
	set auto_log yes

define logger new_logger_2
	set description "Logs experimental data"
	set auto_log yes

define pygaze_drift_correct new_pygaze_drift_correct
	set ypos 0
	set xpos 0
	set target_style default
	set target_color "[foreground]"
	set fixation_triggered yes
	set draw_target yes
	set description "Perform eye-tracker drift correction"

define pygaze_drift_correct new_pygaze_drift_correct_1
	set ypos 0
	set xpos 0
	set target_style default
	set target_color "[foreground]"
	set fixation_triggered yes
	set draw_target yes
	set description "Perform eye-tracker drift correction"

define pygaze_drift_correct new_pygaze_drift_correct_2
	set ypos 0
	set xpos 0
	set target_style default
	set target_color "[foreground]"
	set fixation_triggered yes
	set draw_target yes
	set description "Perform eye-tracker drift correction"

define pygaze_log new_pygaze_log
	set throttle 2
	set msg ""
	set description "Writes information to the eye-tracker logfile"
	set auto_log yes

define pygaze_log new_pygaze_log_1
	set throttle 2
	set msg ""
	set description "Writes information to the eye-tracker logfile"
	set auto_log yes

define pygaze_log new_pygaze_log_2
	set throttle 2
	set msg ""
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define pygaze_start_recording new_pygaze_start_recording
	set status_msg start_trial
	set description "Puts the eye tracker into recording mode"

define pygaze_start_recording new_pygaze_start_recording_1
	set status_msg start_trial
	set description "Puts the eye tracker into recording mode"

define pygaze_start_recording new_pygaze_start_recording_2
	set status_msg start_trial
	set description "Puts the eye tracker into recording mode"

define pygaze_stop_recording new_pygaze_stop_recording
	set status_msg stop_trial
	set description "Stops recording of eye tracking data"

define pygaze_stop_recording new_pygaze_stop_recording_1
	set status_msg stop_trial
	set description "Stops recording of eye tracking data"

define pygaze_stop_recording new_pygaze_stop_recording_2
	set status_msg stop_trial
	set description "Stops recording of eye tracking data"

define reset_feedback new_reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define inline_script pipeline
	set description "Executes Python code"
	___run__
	# Runs the entire pipeline here !
	# returns the mean and std of areas for the three different levels
	def run_pipeline(baseline, pupil, level):
		
		l = len(baseline)
		# first correct the blinks 
		for i in range(l):
			baseline[i] = fix_blinks(baseline[i])
			pupil[i] = fix_blinks(pupil[i])
			
		# subtract the baseline 
		pupil = pre_process(pupil, baseline)
		
		areas_1 = []  # areas for easy
		areas_2 = []  # areas for medium
		areas_3 = []  # areas for difficult
		
		# find the sum of area for the conditions
		for i in range(l):
			a = find_pupil_area(pupil[i])
			if(level[i] == "easy"):
				areas_1.append(a)
			elif(level[i] == "medium"):
				areas_2.append(a)
			else:
				areas_3.append(a)
				
		# remove outliers 
		areas_1 = remove_area_outliers(areas_1)
		areas_2 = remove_area_outliers(areas_2)
		areas_3 = remove_area_outliers(areas_3)
		
		return areas_1, areas_2, areas_3
	__end__
	set _prepare ""

define form_text_display practice_instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Instructions
	__form_text__
	The training phase for arithmetic questions will start now. 
	You will be shown some arithmetic expressions. You either need to calculate the result or 
	find the value of x mentally.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define inline_script preprocess
	set description "Executes Python code"
	___run__
	
	import numpy as np
	
	def pre_process(pupil_size, base_line):
		# subtracts the average value of the baseline from all the entries of pupil_size
		mean_base = np.mean(base_line)
		pupil_size = [i - mean_base for i in pupil_size]
		return pupil_size
	__end__
	set _prepare ""

define inline_script pupil_area
	set description "Executes Python code"
	___run__
	
	def find_pupil_area(pupil_s):
		# finds the area for a given array of pupil sizes !
		area = 0
		for i in pupil_s:
			area += i
			
		return area
	__end__
	set _prepare ""

define pygaze_init pygaze_init
	set tracker_type "Simple dummy"
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initialize and calibrate eye tracker"
	set calibrate yes
	set calbeep yes
	set _logfile automatic

define sketchpad question_presentation
	set duration 4000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=40 html=yes show_if=always text="[question]" x=0 y=0 z_index=0

define sequence question_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_pygaze_drift_correct_2 always
	run new_pygaze_start_recording_2 always
	run fixation_cross_2 always
	run question_presentation always
	run fixation_cross_3 always
	run get_baseline_2 always
	run select_specific_question always
	run answer_presentation always
	run get_response_data always
	run new_pygaze_log_1 always
	run new_logger_2 always
	run new_pygaze_stop_recording_2 always

define loop questions
	set source_file "questions.csv"
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 20
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 question "Are you a Human-Machine Communication student?"
	setcycle 0 arithmetic_1 "2 + 6"
	setcycle 0 arithmetic_2 "2x = 8"
	setcycle 0 arithmetic_3 "3x - 5 = 4"
	setcycle 0 reversal_1 cat
	setcycle 0 reversal_2 apple
	setcycle 0 reversal_3 jukebox
	setcycle 1 question "Are you an international student?"
	setcycle 1 arithmetic_1 "8 + 1"
	setcycle 1 arithmetic_2 "5x = 15"
	setcycle 1 arithmetic_3 "6x + 2 = 20"
	setcycle 1 reversal_1 dog
	setcycle 1 reversal_2 birds
	setcycle 1 reversal_3 buzzard
	setcycle 2 question "Do you have a pet?"
	setcycle 2 arithmetic_1 "3 + 6"
	setcycle 2 arithmetic_2 "3x = 12"
	setcycle 2 arithmetic_3 "4x - 3 = 13"
	setcycle 2 reversal_1 you
	setcycle 2 reversal_2 syrup
	setcycle 2 reversal_3 grizzly
	setcycle 3 question "Do you play sports?"
	setcycle 3 arithmetic_1 "6 + 3"
	setcycle 3 arithmetic_2 "4x = 8"
	setcycle 3 arithmetic_3 "2x + 8 = 18"
	setcycle 3 reversal_1 man
	setcycle 3 reversal_2 quick
	setcycle 3 reversal_3 puzzles
	setcycle 4 question "Is 42 the meaning of life?"
	setcycle 4 arithmetic_1 "7 + 2"
	setcycle 4 arithmetic_2 "7x = 21"
	setcycle 4 arithmetic_3 "5x - 3 = 7"
	setcycle 4 reversal_1 job
	setcycle 4 reversal_2 pizza
	setcycle 4 reversal_3 acidity
	setcycle 5 question "Do you speak Dutch?"
	setcycle 5 arithmetic_1 "1 + 7"
	setcycle 5 arithmetic_2 "6x = 24"
	setcycle 5 arithmetic_3 "7x + 5 = 12"
	setcycle 5 reversal_1 pen
	setcycle 5 reversal_2 quirk
	setcycle 5 reversal_3 codfish
	setcycle 6 question "Are you a member of Cover?"
	setcycle 6 arithmetic_1 "3 + 2"
	setcycle 6 arithmetic_2 "8x = 24"
	setcycle 6 arithmetic_3 "2x + 4 = 12"
	setcycle 6 reversal_1 jug
	setcycle 6 reversal_2 judge
	setcycle 6 reversal_3 cellars
	setcycle 7 question "Is this your first master?"
	setcycle 7 arithmetic_1 "4 + 3"
	setcycle 7 arithmetic_2 "3x = 9"
	setcycle 7 arithmetic_3 "3x + 4 = 13"
	setcycle 7 reversal_1 fox
	setcycle 7 reversal_2 vizor
	setcycle 7 reversal_3 entails
	setcycle 8 question "Do you like our experiment?"
	setcycle 8 arithmetic_1 "5 + 4"
	setcycle 8 arithmetic_2 "7x = 14"
	setcycle 8 arithmetic_3 "9x - 8 = 10"
	setcycle 8 reversal_1 joy
	setcycle 8 reversal_2 joker
	setcycle 8 reversal_3 opposed
	setcycle 9 question "Do you have siblings?"
	setcycle 9 arithmetic_1 "2 + 1"
	setcycle 9 arithmetic_2 "2x = 16"
	setcycle 9 arithmetic_3 "4x + 5 = 17"
	setcycle 9 reversal_1 box
	setcycle 9 reversal_2 jewel
	setcycle 9 reversal_3 plowing
	setcycle 10 question "Do you like cilantro?"
	setcycle 10 arithmetic_1 "7 + 3"
	setcycle 10 arithmetic_2 "3x = 18"
	setcycle 10 arithmetic_3 "2x - 8 = 8"
	setcycle 10 reversal_1 mix
	setcycle 10 reversal_2 mummy
	setcycle 10 reversal_3 sandbox
	setcycle 11 question "Are you male?"
	setcycle 11 arithmetic_1 "8 + 4"
	setcycle 11 arithmetic_2 "5x = 10"
	setcycle 11 arithmetic_3 "5x + 4 = 24"
	setcycle 11 reversal_1 zap
	setcycle 11 reversal_2 chick
	setcycle 11 reversal_3 sideway
	setcycle 12 question "Are you female?"
	setcycle 12 arithmetic_1 "4 + 7"
	setcycle 12 arithmetic_2 "2x = 26"
	setcycle 12 arithmetic_3 "6x - 7 = 11"
	setcycle 12 reversal_1 jaw
	setcycle 12 reversal_2 knock
	setcycle 12 reversal_3 towboat
	setcycle 13 question "Do you wear glasses/lenses?"
	setcycle 13 arithmetic_1 "2 + 9"
	setcycle 13 arithmetic_2 "4x = 16"
	setcycle 13 arithmetic_3 "4x + 3 = 19"
	setcycle 13 reversal_1 jay
	setcycle 13 reversal_2 major
	setcycle 13 reversal_3 vacancy
	setcycle 14 question "Do you like Groningen?"
	setcycle 14 arithmetic_1 "1 + 5"
	setcycle 14 arithmetic_2 "4x = 20"
	setcycle 14 arithmetic_3 "7x - 5 = 9"
	setcycle 14 reversal_1 jog
	setcycle 14 reversal_2 epoxy
	setcycle 14 reversal_3 yawning
	setcycle 15 question "Do you prefer Android over iPhone?"
	setcycle 15 arithmetic_1 "6 + 3"
	setcycle 15 arithmetic_2 "5x = 25"
	setcycle 15 arithmetic_3 "3x - 5 = 16"
	setcycle 15 reversal_1 map
	setcycle 15 reversal_2 snake
	setcycle 15 reversal_3 bandits
	setcycle 16 question "Do you like coffee?"
	setcycle 16 arithmetic_1 "8 + 1"
	setcycle 16 arithmetic_2 "3x = 18"
	setcycle 16 arithmetic_3 "8x + 3 = 27"
	setcycle 16 reversal_1 par
	setcycle 16 reversal_2 agave
	setcycle 16 reversal_3 bandits
	setcycle 17 question "Do you like shopping?"
	setcycle 17 arithmetic_1 "1 + 4"
	setcycle 17 arithmetic_2 "7x = 35"
	setcycle 17 arithmetic_3 "9x - 9 = 18"
	setcycle 17 reversal_1 pat
	setcycle 17 reversal_2 leave
	setcycle 17 reversal_3 grandpa
	setcycle 18 question "Did you brush your teeth this morning?"
	setcycle 18 arithmetic_1 "2 + 8"
	setcycle 18 arithmetic_2 "6x = 30"
	setcycle 18 arithmetic_3 "5x + 3 = 23"
	setcycle 18 reversal_1 put
	setcycle 18 reversal_2 fault
	setcycle 18 reversal_3 kathode
	setcycle 19 question "Did you sleep well?"
	setcycle 19 arithmetic_1 "3 + 4"
	setcycle 19 arithmetic_2 "9x = 18"
	setcycle 19 arithmetic_3 "2x - 8 = 10"
	setcycle 19 reversal_1 nap
	setcycle 19 reversal_2 cargo
	setcycle 19 reversal_3 postman
	run question_sequence

define inline_script remove_outliers
	set description "Executes Python code"
	___run__
	def remove_area_outliers(areas):
		# removes the area outliers that are more than 2 std over the mean
		new_areas = []
		mean_area = np.mean(areas)
		std_area = np.std(areas)
		for i in areas:
			if(abs(mean_area - i) < 2*std_area):
				new_areas.append(i)
		return new_areas
	__end__
	set _prepare ""

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define loop reversal
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 30
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 difficulty easy
	setcycle 0 question_no cat
	setcycle 0 tasktype reversal
	setcycle 1 difficulty medium
	setcycle 1 question_no demon
	setcycle 1 tasktype reversal
	setcycle 2 difficulty hard
	setcycle 2 question_no exactly
	setcycle 2 tasktype reversal
	setcycle 3 difficulty easy
	setcycle 3 question_no dog
	setcycle 3 tasktype reversal
	setcycle 4 difficulty medium
	setcycle 4 question_no seven
	setcycle 4 tasktype reversal
	setcycle 5 difficulty hard
	setcycle 5 question_no digital
	setcycle 5 tasktype reversal
	setcycle 6 difficulty easy
	setcycle 6 question_no pen
	setcycle 6 tasktype reversal
	setcycle 7 difficulty medium
	setcycle 7 question_no death
	setcycle 7 tasktype reversal
	setcycle 8 difficulty hard
	setcycle 8 question_no meeting
	setcycle 8 tasktype reversal
	setcycle 9 difficulty easy
	setcycle 9 question_no cup
	setcycle 9 tasktype reversal
	setcycle 10 difficulty medium
	setcycle 10 question_no satan
	setcycle 10 tasktype reversal
	setcycle 11 difficulty hard
	setcycle 11 question_no nuclear
	setcycle 11 tasktype reversal
	setcycle 12 difficulty easy
	setcycle 12 question_no bed
	setcycle 12 tasktype reversal
	setcycle 13 difficulty medium
	setcycle 13 question_no glass
	setcycle 13 tasktype reversal
	setcycle 14 difficulty hard
	setcycle 14 question_no lucifer
	setcycle 14 tasktype reversal
	setcycle 15 difficulty easy
	setcycle 15 question_no pen
	setcycle 15 tasktype reversal
	setcycle 16 difficulty medium
	setcycle 16 question_no quick
	setcycle 16 tasktype reversal
	setcycle 17 difficulty hard
	setcycle 17 question_no puzzels
	setcycle 17 tasktype reversal
	setcycle 18 difficulty easy
	setcycle 18 question_no sad
	setcycle 18 tasktype reversal
	setcycle 19 difficulty medium
	setcycle 19 question_no jumps
	setcycle 19 tasktype reversal
	setcycle 20 difficulty hard
	setcycle 20 question_no against
	setcycle 20 tasktype reversal
	setcycle 21 difficulty easy
	setcycle 21 question_no mad
	setcycle 21 tasktype reversal
	setcycle 22 difficulty medium
	setcycle 22 question_no jacks
	setcycle 22 tasktype reversal
	setcycle 23 difficulty hard
	setcycle 23 question_no airline
	setcycle 23 tasktype reversal
	setcycle 24 difficulty easy
	setcycle 24 question_no ten
	setcycle 24 tasktype reversal
	setcycle 25 difficulty medium
	setcycle 25 question_no jumps
	setcycle 25 tasktype reversal
	setcycle 26 difficulty hard
	setcycle 26 question_no arrival
	setcycle 26 tasktype reversal
	setcycle 27 difficulty easy
	setcycle 27 question_no tan
	setcycle 27 tasktype reversal
	setcycle 28 difficulty medium
	setcycle 28 question_no bacon
	setcycle 28 tasktype reversal
	setcycle 29 difficulty hard
	setcycle 29 question_no believe
	setcycle 29 tasktype reversal
	run trial_sequence_1

define inline_script select_questions
	set description "Executes Python code"
	___run__
	
	def selectQuestions(task, dif1, dif2):
		if task == 1:
			if dif1 == 1:
				questions1 = arit1
			if dif1 == 2:
				questions1 = arit2
				
			if dif2 == 2:
				questions2 = arit2
			if dif2 == 3:
				questions2 = arit3
					
		if task == 2:
			if dif1 == 1:
				questions1 = reversal1
			if dif1 == 2:
				questions1 = reversal2
				
			if dif2 == 2:
				questions2 = reversal2
			if dif2 == 3:
				questions2 = reversal3
				
		return questions1,questions2
	__end__
	set _prepare ""

define inline_script select_specific_question
	set description "Executes Python code"
	set _run ""
	___prepare__
	var.q1 = var.questions1[counter]
	var.q2 = var.questions2[counter]
	counter=counter+1
	__end__

define inline_script set_globals
	set description "Executes Python code"
	set _run "# set the final task type and difficuty levels"
	set _prepare ""

define loop testing
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 testing yes
	run blocksequence_1

define loop training
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	run blocksequence

define sequence trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run new_pygaze_drift_correct always
	run new_pygaze_start_recording always
	run fixation_cross always
	run get_baseline always
	run arithmetic_task always
	run getdata always
	run new_pygaze_log always
	run new_logger always
	run new_pygaze_stop_recording always

define sequence trial_sequence_1
	set flush_keyboard yes
	set description "A single trial"
	run new_pygaze_drift_correct_1 always
	run new_pygaze_start_recording_1 always
	run fixation_cross_1 always
	run letter_task_1 always
	run get_baseline_1 always
	run blank_screen_1 always
	run getdata_1 always
	run new_pygaze_log_2 always
	run new_logger_1 always
	run new_pygaze_stop_recording_1 always

